WorkflowBuilder(Version=2.4.1)
Disable Bonsai.Video.VideoCaptureDevice(Index=0)
-> Bonsai.Vision.FileCapture(FileName="Trial    14.mpg", PlaybackRate=0, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true)
-> PublishSubject "FP Camera"

GroupWorkflow FP(Description="FP inputs, cropping, saving to file")
    SubscribeSubject "FP Camera"
    -> Disable Timestamp
    -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
    SubscribeSubject "FP Camera"
    -> Disable MemberSelector(Selector=Image) => #4
    -> Disable Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=1610, Y=795), Point(X=1655, Y=795), Point(X=1655, Y=843), Point(X=1610, Y=843)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "470 Top unmarked"(Description="Top fiber on green side (right)") => #6
        WorkflowInput Source1
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #2
        -> WorkflowOutput
        #2 -> PublishSubject "FP Output 470 unmrk"
    #4 -> Disable Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=1651, Y=864), Point(X=1693, Y=864), Point(X=1693, Y=912), Point(X=1651, Y=912)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "470 bottom marked"(Description="Bottom fiber of green side (right)") => #8
        WorkflowInput Source1
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #2
        -> WorkflowOutput
        #2 -> PublishSubject "FP Output 470 mrk"
    #4 -> Disable Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=288, Y=737), Point(X=333, Y=737), Point(X=333, Y=783), Point(X=288, Y=783)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "560 top unmarked"(Description="Top fiber of red side (left)") => #10
        WorkflowInput Source1
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #2
        -> WorkflowOutput
        #2 -> PublishSubject "FP Output 560 unmrk"
    #4 -> Disable Bonsai.Vision.CropPolygon
      Regions(ArrayOfPoint(Point(X=245, Y=809), Point(X=289, Y=809), Point(X=289, Y=856), Point(X=245, Y=856)))
      MaskType=ToZero
      FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
    -> GroupWorkflow "560 bottom marked"(Description="Bottom fiber of red side (left)") => #12
        WorkflowInput Source1
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #2
        -> WorkflowOutput
        #2 -> PublishSubject "FP Output 560 mrk"
    SubscribeSubject "FP Camera"
    -> Disable Timestamp => #14
    #2, #6, #8, #10, #12, #14 -> Disable Zip => #15
    Disable SubscribeSubject "FPIntensity CSV"
    -> Disable PropertyMapping(FileName) => #17
    #15, #17 -> Disable Bonsai.IO.CsvWriter(FileName=TESTfp_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
    #2 -> PublishSubject "Tot ms in day Output"

Disable GroupWorkflow "Key Press Tracking"(Description="Keeps track of key presses during experiment, if enabled. ")
    Bonsai.Windows.Input.KeyDown(Filter=None, SuppressRepetitions=false) => #0
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #2
    #0, #2 -> Zip
    -> Bonsai.IO.CsvWriter(FileName=TESTkd_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false, CompatibilityMode=true)

GroupWorkflow "Exp Info for Naming"(Description="Provides naming scheme, and location to save")
    ExternalizedMapping(Value(DisplayName=Directory))
    -> StringProperty(Value="C:\Users\tglaze\Box\FP Testing\") => #1
    StringProperty(Value=_) => #2
    StringProperty(Value=_) => #3
    StringProperty(Value=_) => #4
    ExternalizedMapping(Value(DisplayName="exp name"))
    -> StringProperty(Value=FST) => #6
    ExternalizedMapping(Value(DisplayName="Cage ID"))
    -> StringProperty(Value=C333) => #8
    ExternalizedMapping(Value(DisplayName="Mouse ID"))
    -> StringProperty(Value=DatCreM2) => #10
    #1, #6, #3, #8, #2, #10, #4 -> Zip
    -> Add
    -> ReplaySubject "File naming info"(BufferSize=nil)

    GroupWorkflow "TimeStamp, full date, string"(Description="contains full current date/time, as a string for naming purposes")
        StringProperty(Value=_) => #0
        StringProperty(Value=_) => #1
        StringProperty(Value=_) => #2
        StringProperty(Value="_(") => #3
        IntProperty(Value=0)
        -> Timestamp => #5
        -> MemberSelector(Selector=Timestamp.Year)
        -> Format(Format="", Selector=it) => #7
        #5 -> MemberSelector(Selector=Timestamp.Month)
        -> Format(Format="", Selector=it) => #9
        #5 -> Disable MemberSelector(Selector=Timestamp.DateTime.Day)
        -> MemberSelector(Selector=Timestamp.Day)
        -> Format(Format="", Selector=it) => #12
        #5 -> Disable MemberSelector(Selector="Timestamp.DateTime.TimeOfDay.Hours,Timestamp.DateTime.TimeOfDay.Minutes")
        -> MemberSelector(Selector=Timestamp.Hour)
        -> Format(Format="", Selector=it) => #15
        #5 -> MemberSelector(Selector=Timestamp.Minute)
        -> Format(Format="", Selector=it) => #17
        #5 -> MemberSelector(Selector=Timestamp.Millisecond)
        -> Format(Format="", Selector=it) => #19
        StringProperty(Value=.) => #20
        StringProperty(Value=.) => #21
        StringProperty(Value=")") => #22
        #0, #7, #1, #9, #2, #12, #3, #15, #20, #17, #21, #19, #22 -> Zip
        -> Add
        -> ReplaySubject "current date"(BufferSize=nil)
        -> WorkflowOutput

    GroupWorkflow "File types"
        ExternalizedMapping(Value(DisplayName=.CSV))
        -> StringProperty(Value=_.CSV)
        -> ReplaySubject "CSV file"(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=.JPG))
        -> StringProperty(Value=_.jpg)
        -> ReplaySubject "JPG file"(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=.AVI))
        -> StringProperty(Value=_.AVI)
        -> ReplaySubject "AVI file"(BufferSize=nil)

    GroupWorkflow "Full File Names"(Description="Naming schemes for each type of file output for the workflow")
        ExternalizedMapping(Value(DisplayName=Vid_Top))
        -> StringProperty(Value=TopCamera) => #1
        SubscribeSubject "File naming info" => #2
        SubscribeSubject "current date" => #3
        SubscribeSubject "AVI file" => #4
        #2, #1, #3, #4 -> Zip
        -> Add
        -> ReplaySubject "TopCam AVI"(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=Vid_Side))
        -> StringProperty(Value=SideCamera) => #9
        SubscribeSubject "File naming info" => #10
        SubscribeSubject "current date" => #11
        SubscribeSubject "AVI file" => #12
        #10, #9, #11, #12 -> Zip
        -> Add
        -> ReplaySubject "SideCam AVI"(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=Centroid_Top))
        -> StringProperty(Value=CentroidTop) => #17
        SubscribeSubject "File naming info" => #18
        SubscribeSubject "current date" => #19
        SubscribeSubject "CSV file" => #20
        #18, #17, #19, #20 -> Zip
        -> Add
        -> ReplaySubject "CentroidTop CSV"(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=Centroid_Side))
        -> StringProperty(Value=CentroidSIde) => #25
        SubscribeSubject "File naming info" => #26
        SubscribeSubject "CSV file" => #27
        SubscribeSubject "current date" => #28
        #26, #25, #28, #27 -> Zip
        -> Add
        -> ReplaySubject "CentroidSide CSV"(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=FP_Cam))
        -> StringProperty(Value=FPIntensityValues) => #33
        SubscribeSubject "File naming info" => #34
        SubscribeSubject "current date" => #35
        SubscribeSubject "CSV file" => #36
        #34, #33, #35, #36 -> Zip
        -> Add
        -> ReplaySubject "FPIntensity CSV"(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=Dist_Trvl_Top))
        -> StringProperty(Value=DistanceTop) => #41
        SubscribeSubject "File naming info" => #42
        SubscribeSubject "current date" => #43
        SubscribeSubject "CSV file" => #44
        #42, #41, #43, #44 -> Zip
        -> Add
        -> ReplaySubject "DistanceTop CSV"(BufferSize=nil)

        Disable GroupWorkflow "Old X,Y Tracking Filenames"
            SubscribeSubject "File naming info" => #0
            ExternalizedMapping(Value(DisplayName=MT_XSide))
            -> StringProperty(Value=MotionTrackXSide) => #2
            SubscribeSubject "current date" => #3
            SubscribeSubject "CSV file" => #4
            #0, #2, #3, #4 -> Zip
            -> Add
            -> ReplaySubject "MotionTrackXSide CSV"(BufferSize=nil)

            ExternalizedMapping(Value(DisplayName=MT_YSide))
            -> StringProperty(Value=MotionTrackYSide) => #9
            SubscribeSubject "File naming info" => #10
            SubscribeSubject "current date" => #11
            SubscribeSubject "CSV file" => #12
            #10, #9, #11, #12 -> Zip
            -> Add
            -> ReplaySubject "MotionTrackYSide CSV"(BufferSize=nil)

            ExternalizedMapping(Value(DisplayName=MT_XTop))
            -> StringProperty(Value=MotionTrackXTop) => #17
            SubscribeSubject "File naming info" => #18
            SubscribeSubject "current date" => #19
            SubscribeSubject "CSV file" => #20
            #18, #17, #19, #20 -> Zip
            -> Add
            -> ReplaySubject "MotionTrackXTop CSV"(BufferSize=nil)

            ExternalizedMapping(Value(DisplayName=MT_YTop))
            -> StringProperty(Value=MotionTrackYTop) => #25
            SubscribeSubject "File naming info" => #26
            SubscribeSubject "current date" => #27
            SubscribeSubject "CSV file" => #28
            #26, #25, #27, #28 -> Zip
            -> Add
            -> ReplaySubject "MotionTrackYTop CSV"(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=Dist_Trvl_Side))
        -> StringProperty(Value=DistanceSide) => #50
        SubscribeSubject "File naming info" => #51
        SubscribeSubject "current date" => #52
        SubscribeSubject "CSV file" => #53
        #51, #50, #52, #53 -> Zip
        -> Add
        -> ReplaySubject "DistanceSide CSV"(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=Pxl_Chng_Top))
        -> StringProperty(Value=PixelAreaChangeTop) => #58
        SubscribeSubject "File naming info" => #59
        SubscribeSubject "current date" => #60
        SubscribeSubject "CSV file" => #61
        #59, #58, #60, #61 -> Zip
        -> Add
        -> ReplaySubject "PxlChangeTop CSV"(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=Pxl_Chng_Side))
        -> StringProperty(Value=PixelAreaChangeSide) => #66
        SubscribeSubject "File naming info" => #67
        SubscribeSubject "current date" => #68
        SubscribeSubject "CSV file" => #69
        #67, #66, #68, #69 -> Zip
        -> Add
        -> ReplaySubject "PxlChangeSide CSV"(BufferSize=nil)

        ExternalizedMapping(Value)
        -> StringProperty => #74
        SubscribeSubject "File naming info" => #75
        SubscribeSubject "current date" => #76
        SubscribeSubject "CSV file" => #77
        #75, #74, #76, #77 -> Zip
        -> Add
        -> ReplaySubject(BufferSize=nil)

GroupWorkflow "Top Camera"
    Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> Bonsai.Vision.FileCapture(FileName="Trial    14.mpg", PlaybackRate=0, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true) => #1
    SubscribeSubject "FP Camera" => #2
    #1, #2 -> SubscribeWhen => #3
    -> Timestamp
    -> PublishSubject TimestampedImageTop
    #3 -> PublishSubject TopCamStream

    GroupWorkflow TimestampCamTop => #7
        SubscribeSubject TimestampedImageTop
        -> InputMapping(Size(Selector=Value.Size))
        -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=960, Height=720), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #2
        SubscribeSubject TimestampedImageTop
        -> MemberSelector(Selector=Value)
        -> PropertyMapping(Image) => #5
        #2, #5 -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=0, Height=0), Interpolation=Linear) => #6
        SubscribeSubject TimestampedImageTop
        -> MemberSelector(Selector=Timestamp)
        -> Format(Format={0:o})
        -> PropertyMapping(Text) => #10
        #6, #10 -> Bonsai.Vision.Drawing.AddText
          Text=2020-06-08T14:52:30.0702976-05:00
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=255, Val1=255, Val2=255, Val3=255)
          Font="Microsoft Sans Serif, 7.8pt"
          Origin(X=0, Y=450)
        -> Bonsai.Vision.Drawing.DrawCanvas
        -> WorkflowOutput
    SubscribeSubject "TopCam AVI"
    -> PropertyMapping(FileName) => #9
    #7, #9 -> Disable Bonsai.Vision.VideoWriter(FileName="", Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)

    SubscribeSubject TopCamStream
    -> GroupWorkflow "bkgd sub tracking, top"(Description="Tracking of total number of pixels change over time")
        WorkflowInput Source1
        -> Bonsai.Vision.CropPolygon
          Regions
            ArrayOfPoint
              Point(X=53, Y=117)
              Point(X=463, Y=118)
              Point(X=472, Y=239)
              Point(X=492, Y=245)
              Point(X=509, Y=234)
              Point(X=517, Y=119)
              Point(X=927, Y=124)
              Point(X=929, Y=547)
              Point(X=513, Y=540)
              Point(X=511, Y=457)
              Point(X=504, Y=421)
              Point(X=488, Y=412)
              Point(X=476, Y=420)
              Point(X=459, Y=458)
              Point(X=458, Y=540)
              Point(X=48, Y=539)
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Vision.Grayscale
        -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=60, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
        -> PublishSubject "bkgd sub, top"
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> PublishSubject "bin region, top"
        -> WorkflowOutput

        Disable Bonsai.Vision.ConvertColor(Conversion=Bgr2Hsv)
        -> Disable Bonsai.Vision.HsvThreshold(Lower(Val0=1, Val1=0, Val2=0, Val3=0), Upper(Val0=179, Val1=255, Val2=64, Val3=0))
    -> Bonsai.Vision.Centroid
    -> PublishSubject "Centroid, Top"

    SubscribeSubject "bin region, top"
    -> MemberSelector(Selector=Area) => #16
    -> Skip(Count=1) => #17
    #16, #17 -> Zip
    -> Subtract
    -> Bonsai.Dsp.Abs => #20
    -> GreaterThan(Operand=FloatProperty(Value=20))
    -> Bonsai.Scripting.PythonTransform "Turn Bool to Binomial" => #22
      Script:
        @returns(int)
        def process(tf):
          if tf == True:
            return int(True)
          elif tf == False:
            return int(False)
    #20 -> GreaterThan(Operand=DoubleProperty(Value=40))
    -> Bonsai.Scripting.PythonTransform "Turn Bool to Binomial" => #24
      Script:
        @returns(int)
        def process(tf):
          if tf == True:
            return int(True)+1
          elif tf == False:
            return int(False)
    #20 -> GreaterThan(Operand=DoubleProperty(Value=60))
    -> Bonsai.Scripting.PythonTransform "Turn Bool to Binomial" => #26
      Script:
        @returns(int)
        def process(tf):
          if tf == True:
            return int(True)+2
          elif tf == False:
            return int(False)
    -> GroupWorkflow "TimeStamp, ms only"(Description="Timestamp, first total milliseconds in day at time of recording, then full date timestamp. Then zipped for ease of use. ") => #27
        WorkflowInput Source1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable Zip
        -> WorkflowOutput
    #22, #24, #26, #27 -> Zip
    -> PublishSubject "Pixel Top Output" => #29
    SubscribeSubject "PxlChangeTop CSV"
    -> PropertyMapping(FileName) => #31
    #29, #31 -> Bonsai.IO.CsvWriter
      FileName="C:\Users\tglaze\Box\FP Testing\FST_C333_DatCreM2_PixelAreaChangeTop_2020_6_8_(14.52.230)_.CSV"
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false

    SubscribeSubject "Centroid, Top" => #33
    -> MemberSelector(Selector=X) => #34
    -> Skip(Count=1) => #35
    #33 -> MemberSelector(Selector=Y) => #36
    -> Skip(Count=1) => #37
    #34, #35, #36, #37 -> Zip
    -> Bonsai.Scripting.PythonTransform => #39
      Script:
        import math

        @returns(float)

        def process(val):
          distance = math.sqrt(((val[0]-val[1])**2)+((val[2]-val[3])**2))
          return distance
    -> GroupWorkflow "TimeStamp, ms only"(Description="Timestamp, first total milliseconds in day at time of recording, then full date timestamp. Then zipped for ease of use. ") => #40
        WorkflowInput Source1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable Zip
        -> WorkflowOutput
    #39, #40 -> Zip => #41
    SubscribeSubject "DistanceTop CSV"
    -> PropertyMapping(FileName) => #43
    #41, #43 -> Bonsai.IO.CsvWriter
      FileName="C:\Users\tglaze\Box\FP Testing\FST_C333_DatCreM2_DistanceTop_2020_6_8_(14.52.230)_.CSV"
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
    #39 -> PublishSubject "Distance Top Output"

    SubscribeSubject "CentroidTop CSV"
    -> PropertyMapping(FileName) => #47
    SubscribeSubject "Centroid, Top" => #48
    -> GroupWorkflow "TimeStamp, ms only,TopCam"(Description="Timestamp, total milliseconds in day at time of recording. ") => #49
        WorkflowInput Source1
        -> Timestamp => #1
        Source2=#1 -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> WorkflowOutput
    #48, #49 -> Zip => #50
    #50, #47 -> Disable Bonsai.IO.CsvWriter
      FileName="C:\Users\tglaze\Box\FP Testing\FST_C333_DatCreM2_CentroidTop_2020_6_8_(10.20.878)_.CSV"
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false

GroupWorkflow "Side Camera"
    Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="")
    -> Bonsai.Vision.FileCapture(FileName="Trial    14.mpg", PlaybackRate=0, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true) => #1
    SubscribeSubject "FP Camera" => #2
    #1, #2 -> SubscribeWhen => #3
    -> Timestamp
    -> PublishSubject TimestampedImageSide
    #3 -> PublishSubject SideCamStream

    GroupWorkflow TimestampCamSide => #7
        SubscribeSubject TimestampedImageSide
        -> InputMapping(Size(Selector=Value.Size))
        -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=960, Height=720), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #2
        SubscribeSubject TimestampedImageSide
        -> MemberSelector(Selector=Value)
        -> PropertyMapping(Image) => #5
        #2, #5 -> Bonsai.Vision.Drawing.AddImage(Destination(X=0, Y=0, Width=0, Height=0), Interpolation=Linear) => #6
        SubscribeSubject TimestampedImageSide
        -> MemberSelector(Selector=Timestamp)
        -> Format(Format={0:o})
        -> PropertyMapping(Text) => #10
        #6, #10 -> Bonsai.Vision.Drawing.AddText
          Text=2020-06-08T14:52:30.0951040-05:00
          Alignment=Near
          LineAlignment=Near
          TextRenderingHint=AntiAliasGridFit
          Color(Val0=255, Val1=255, Val2=255, Val3=255)
          Font="Microsoft Sans Serif, 7.8pt"
          Origin(X=0, Y=450)
        -> Bonsai.Vision.Drawing.DrawCanvas
        -> WorkflowOutput
    SubscribeSubject "SideCam AVI"
    -> PropertyMapping(FileName) => #9
    #7, #9 -> Disable Bonsai.Vision.VideoWriter(FileName="", Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)

    SubscribeSubject SideCamStream
    -> GroupWorkflow "bkgd sub tracking, side"(Description="color tracking")
        WorkflowInput Source1
        -> Bonsai.Vision.CropPolygon
          Regions
            ArrayOfPoint
              Point(X=53, Y=117)
              Point(X=463, Y=118)
              Point(X=472, Y=239)
              Point(X=492, Y=245)
              Point(X=509, Y=234)
              Point(X=517, Y=119)
              Point(X=927, Y=124)
              Point(X=929, Y=547)
              Point(X=513, Y=540)
              Point(X=511, Y=457)
              Point(X=504, Y=421)
              Point(X=488, Y=412)
              Point(X=476, Y=420)
              Point(X=459, Y=458)
              Point(X=458, Y=540)
              Point(X=48, Y=539)
          MaskType=ToZero
          FillValue(Val0=0, Val1=0, Val2=0, Val3=0)
        -> Bonsai.Vision.Grayscale
        -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=60, AdaptationRate=0, ThresholdValue=18, ThresholdType=Binary, SubtractionMethod=Dark)
        -> PublishSubject "bkgd sub, side"
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=nil, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> PublishSubject "bin region, side"
        -> WorkflowOutput

        Disable Bonsai.Vision.ConvertColor(Conversion=Bgr2Hsv)
        -> Disable Bonsai.Vision.HsvThreshold(Lower(Val0=1, Val1=0, Val2=0, Val3=0), Upper(Val0=179, Val1=255, Val2=64, Val3=0))
    -> Bonsai.Vision.Centroid
    -> PublishSubject "Centroid, Side"

    SubscribeSubject "bin region, side"
    -> MemberSelector(Selector=Area) => #16
    -> Skip(Count=1) => #17
    #16, #17 -> Zip
    -> Subtract
    -> Bonsai.Dsp.Abs => #20
    -> GreaterThan(Operand=FloatProperty(Value=20))
    -> Bonsai.Scripting.PythonTransform "Turn Bool to Binomial" => #22
      Script:
        @returns(int)
        def process(tf):
          if tf == True:
            return int(True)
          elif tf == False:
            return int(False)
    #20 -> GreaterThan(Operand=DoubleProperty(Value=40))
    -> Bonsai.Scripting.PythonTransform "Turn Bool to Binomial" => #24
      Script:
        @returns(int)
        def process(tf):
          if tf == True:
            return int(True)+1
          elif tf == False:
            return int(False)
    #20 -> GreaterThan(Operand=DoubleProperty(Value=60))
    -> Bonsai.Scripting.PythonTransform "Turn Bool to Binomial" => #26
      Script:
        @returns(int)
        def process(tf):
          if tf == True:
            return int(True)+2
          elif tf == False:
            return int(False)
    -> GroupWorkflow "TimeStamp, ms only"(Description="Timestamp, first total milliseconds in day at time of recording, then full date timestamp. Then zipped for ease of use. ") => #27
        WorkflowInput Source1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable Zip
        -> WorkflowOutput
    #22, #24, #26, #27 -> Zip
    -> PublishSubject "Pixel Side Output" => #29
    SubscribeSubject "PxlChangeSide CSV"
    -> PropertyMapping(FileName) => #31
    #29, #31 -> Bonsai.IO.CsvWriter
      FileName="C:\Users\tglaze\Box\FP Testing\FST_C333_DatCreM2_PixelAreaChangeSide_2020_6_8_(14.52.230)_.CSV"
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false

    SubscribeSubject "Centroid, Side" => #33
    -> MemberSelector(Selector=X) => #34
    -> Skip(Count=1) => #35
    #33 -> MemberSelector(Selector=Y) => #36
    -> Skip(Count=1) => #37
    #34, #35, #36, #37 -> Zip
    -> Bonsai.Scripting.PythonTransform => #39
      Script:
        import math

        @returns(float)

        def process(val):
          distance = math.sqrt(((val[0]-val[1])**2)+((val[2]-val[3])**2))
          return distance
    -> GroupWorkflow "TimeStamp, ms only"(Description="Timestamp, first total milliseconds in day at time of recording, then full date timestamp. Then zipped for ease of use. ") => #40
        WorkflowInput Source1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable Zip
        -> WorkflowOutput
    #39, #40 -> Zip => #41
    SubscribeSubject "DistanceSide CSV"
    -> PropertyMapping(FileName) => #43
    #41, #43 -> Bonsai.IO.CsvWriter
      FileName="C:\Users\tglaze\Box\FP Testing\FST_C333_DatCreM2_DistanceSide_2020_6_8_(14.52.230)_.CSV"
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
    #39 -> PublishSubject "Distance Side Output"

    SubscribeSubject "CentroidSide CSV"
    -> PropertyMapping(FileName) => #47
    SubscribeSubject "Centroid, Side" => #48
    -> GroupWorkflow "TimeStamp, ms only, Side Cam"(Description="Timestamp, total milliseconds in day at time of recording. ") => #49
        WorkflowInput Source1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> WorkflowOutput
    #48, #49 -> Zip => #50
    #50, #47 -> Disable Bonsai.IO.CsvWriter
      FileName="C:\Users\tglaze\Box\FP Testing\FST_C333_DatCreM2_CentroidSIde_2020_6_8_(10.20.878)_.CSV"
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false

Disable GroupWorkflow "Old X,Y Tracking"
    SubscribeSubject "MotionTrackXTop CSV"
    -> PropertyMapping(FileName) => #1
    SubscribeSubject "Centroid, Top"
    -> Disable GroupWorkflow "motion track X" => #3
      Description:
        Tracks motion of mouse in X direction; if the difference from one frame to next is
        greater than a threshold (here, set to 2 pixels, to account for jitter), the mouse is
        considered to be moving (returns a TRUE). If less than the threshold, returns a
        FALSE. These are saved, along with the current time of day, to a csv file.
      Workflow
        Disable WorkflowInput Source1 => #0
        -> Disable MemberSelector(Selector=X) => #1
        #0 -> Disable MemberSelector(Selector=X)
        -> Disable Skip(Count=1) => #3
        #1, #3 -> Disable Zip
        -> Disable Subtract
        -> Disable Bonsai.Dsp.Abs
        -> Disable GreaterThan(Operand=FloatProperty(Value=3))
        -> Disable Bonsai.Scripting.PythonTransform "Turn Bool to Binomial"
          Script:
            @returns(int)
            def process(tf):
              if tf == True:
                return int(True)
              elif tf == False:
                return int(False)
        -> Disable Zip
        -> Disable WorkflowOutput

        Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay)
    -> GroupWorkflow "TimeStamp, ms only, Top X"(Description="Timestamp, first total milliseconds in day at time of recording, then full date timestamp. Then zipped for ease of use. ") => #4
        WorkflowInput Source1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable Zip
        -> WorkflowOutput
    #3, #4 -> Zip => #5
    #5, #1 -> Disable Bonsai.IO.CsvWriter
      FileName="C:\Users\tglaze\Box\FP Testing\FST_C333_DatCreM2_MotionTrackXTop_2020_6_8_(10.20.878)_.CSV"
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false

    Disable SubscribeSubject "MotionTrackYTop CSV"
    -> Disable PropertyMapping(FileName) => #8
    SubscribeSubject "Centroid, Top"
    -> Disable GroupWorkflow "motion track y" => #10
      Description:
        Tracks motion of mouse in Y direction; if the difference from one frame to next is
        greater than a threshold (here, set to 2 pixels, to account for jitter), the mouse is
        considered to be moving (returns a TRUE). If less than the threshold, returns a
        FALSE. These are saved, along with the current time of day, to a csv file.
      Workflow
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Y)
        -> Skip(Count=1) => #2
        #0 -> MemberSelector(Selector=Y) => #3
        #3, #2 -> Zip
        -> Subtract
        -> Bonsai.Dsp.Abs
        -> GreaterThan(Operand=FloatProperty(Value=3))
        -> Bonsai.Scripting.PythonTransform "Turn Bool to Binomial"
          Script:
            @returns(int)
            def process(tf):
              if tf == True:
                return int(True)
              elif tf == False:
                return int(False)
        -> Disable Zip
        -> WorkflowOutput

        Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay)
    -> Disable GroupWorkflow "TimeStamp, ms only, Top Y"(Description="Timestamp, first total milliseconds in day at time of recording, then full date timestamp. Then zipped for ease of use. ") => #11
        WorkflowInput Source1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable Zip
        -> WorkflowOutput
    #10, #11 -> Disable Zip => #12
    #12, #8 -> Disable Bonsai.IO.CsvWriter(FileName="", Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)

    SubscribeSubject "MotionTrackXSide CSV"
    -> PropertyMapping(FileName) => #15
    SubscribeSubject "Centroid, Side"
    -> GroupWorkflow "motion track X" => #17
      Description:
        Tracks motion of mouse in X direction; if the difference from one frame to next is
        greater than a threshold (here, set to 2 pixels, to account for jitter), the mouse is
        considered to be moving (returns a TRUE). If less than the threshold, returns a
        FALSE. These are saved, along with the current time of day, to a csv file.
      Workflow
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=X) => #1
        #0 -> MemberSelector(Selector=X)
        -> Skip(Count=1) => #3
        #1, #3 -> Zip
        -> Subtract
        -> Bonsai.Dsp.Abs
        -> GreaterThan(Operand=FloatProperty(Value=3))
        -> Bonsai.Scripting.PythonTransform "Turn Bool to Binomial"
          Script:
            @returns(int)
            def process(tf):
              if tf == True:
                return int(True)
              elif tf == False:
                return int(False)
        -> Disable Zip
        -> WorkflowOutput

        Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay)
    -> GroupWorkflow "TimeStamp, ms only, Side X"(Description="Timestamp, first total milliseconds in day at time of recording, then full date timestamp. Then zipped for ease of use. ") => #18
        WorkflowInput Source1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable Zip
        -> WorkflowOutput
    #17, #18 -> Zip => #19
    #19, #15 -> Disable Bonsai.IO.CsvWriter
      FileName="C:\Users\tglaze\Box\FP Testing\FST_C333_DatCreM2_MotionTrackXSide_2020_6_8_(10.20.878)_.CSV"
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false

    SubscribeSubject "MotionTrackYSide CSV"
    -> PropertyMapping(FileName) => #22
    SubscribeSubject "Centroid, Side"
    -> GroupWorkflow "motion track y" => #24
      Description:
        Tracks motion of mouse in Y direction; if the difference from one frame to next is
        greater than a threshold (here, set to 2 pixels, to account for jitter), the mouse is
        considered to be moving (returns a TRUE). If less than the threshold, returns a
        FALSE. These are saved, along with the current time of day, to a csv file.
      Workflow
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Y)
        -> Skip(Count=1) => #2
        #0 -> MemberSelector(Selector=Y) => #3
        #3, #2 -> Zip
        -> Subtract
        -> Bonsai.Dsp.Abs
        -> GreaterThan(Operand=FloatProperty(Value=3))
        -> Bonsai.Scripting.PythonTransform "Turn Bool to Binomial"
          Script:
            @returns(int)
            def process(tf):
              if tf == True:
                return int(True)
              elif tf == False:
                return int(False)
        -> Disable Zip
        -> WorkflowOutput

        Disable Timestamp
        -> Disable MemberSelector(Selector=Timestamp.TimeOfDay)
    -> GroupWorkflow "TimeStamp, ms only, Side Y"(Description="Timestamp, first total milliseconds in day at time of recording, then full date timestamp. Then zipped for ease of use. ") => #25
        WorkflowInput Source1
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Disable Zip
        -> WorkflowOutput
    #24, #25 -> Zip => #26
    #26, #22 -> Disable Bonsai.IO.CsvWriter
      FileName="C:\Users\tglaze\Box\FP Testing\FST_C333_DatCreM2_MotionTrackYSide_2020_6_8_(10.20.878)_.CSV"
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false

GroupWorkflow "Time-lock Single CSV File"
    Disable SubscribeSubject "Distance Side Output" => #0
    Disable SubscribeSubject "Pixel Side Output" => #1
    SubscribeSubject "Centroid, Side" => #2
    Disable SubscribeSubject "Distance Top Output" => #3
    Disable SubscribeSubject "Pixel Top Output" => #4
    SubscribeSubject "Centroid, Top" => #5
    SubscribeSubject "FP Output 560 mrk" => #6
    SubscribeSubject "FP Output 560 unmrk" => #7
    SubscribeSubject "FP Output 470 mrk" => #8
    SubscribeSubject "FP Output 470 unmrk" => #9
    SubscribeSubject "Tot ms in day Output" => #10
    #10, #9, #8, #7, #6, #5, #4, #3, #2, #1, #0 -> Disable CombineLatest
    -> Zip
    -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)

    Disable SubscribeSubject
